<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:AllenNeuralDynamics.Core.Logging;assembly=AllenNeuralDynamics.Core"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:GenerateRootLoggingPath.bonsai">
        <RootFolder>DataFolder</RootFolder>
        <Subject>Animal0</Subject>
        <SubjectName>LoggingRootPath</SubjectName>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p1:SoftwareEvent">
        <rx:Name>SoftwareEvents</rx:Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>None</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:CreateSoftwareEvent">
          <p1:EventName>SoftwareEvent</p1:EventName>
        </Combinator>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>SoftwareEvents</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT0S</rx:DueTime>
          <rx:Period>PT1S</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:CreateSoftwareEvent">
          <p1:EventName>SoftwareEvent2</p1:EventName>
        </Combinator>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>SoftwareEvents</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:Device">
          <harp:OperationMode>Active</harp:OperationMode>
          <harp:OperationLed>On</harp:OperationLed>
          <harp:DumpRegisters>true</harp:DumpRegisters>
          <harp:VisualIndicators>On</harp:VisualIndicators>
          <harp:Heartbeat>Disabled</harp:Heartbeat>
          <harp:IgnoreErrors>false</harp:IgnoreErrors>
          <harp:PortName>COMx</harp:PortName>
        </Combinator>
      </Expression>
      <Expression xsi:type="harp:Parse">
        <harp:Register xsi:type="harp:ParseMessagePayload">
          <harp:PayloadType>Timestamp</harp:PayloadType>
          <harp:IsArray>false</harp:IsArray>
        </harp:Register>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>HarpTimestampSource</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>SoftwareEvents</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>HarpTimestampSource</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:CreateTimestamped" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:TimestampSoftwareEvent" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:LogSoftwareEventsDemux.bonsai">
        <LoggerName>SoftwareEvents</LoggerName>
        <SubjectName>LoggingRootPath</SubjectName>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="11" To="13" Label="Source1" />
      <Edge From="12" To="13" Label="Source2" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>